configuration:
    demo2:
        FIB_folder_path_str: r"C:\Users\dmv31621\OneDrive - The Rosalind Franklin
            Institute\2024\00_Adaptive-milling\test_images\test_07-steady-gator\FIB"
        SEM_folder_path_str: r"C:\Users\dmv31621\OneDrive - The Rosalind Franklin
            Institute\2024\00_Adaptive-milling\test_images\test_07-steady-gator\SEM"
    electron:
        beam_type: ELECTRON
        column_tilt: 0
        current: 5.0e-11
        detector_brightness: 0.0
        detector_contrast: 0.0
        detector_mode: Unknown
        detector_type: Unknown
        dwell_time: 1.0e-06
        enabled: true
        eucentric_height: 0.007
        hfw: 0.00015
        plasma: false
        plasma_gas: null
        resolution:
        - 1536
        - 1024
        scan_rotation: 0.0
        shift:
            x: 0.0
            y: 0.0
        stigmation:
            x: 0.0
            y: 0.0
        voltage: 2000
        working_distance: 0.007
    gis:
        enabled: true
        multichem: true
        sputter_coater: false
    imaging:
        autocontrast: true
        autogamma: false
        beam_type: ELECTRON
        drift_correction: false
        dwell_time: 1.0e-06
        filename: default_image
        frame_integration: null
        hfw: 0.00015
        line_integration: null
        path: C:/Users/dmv31621/OneDrive - The Rosalind Franklin Institute/2025/00_Adaptive-milling/tmp\AutoLamella-2025-03-10-22-34
        reduced_area: null
        resolution:
        - 1536
        - 1024
        save: false
        scan_interlacing: null
    info:
        application: null
        application_version: null
        fibsem_version: 0.4.0a1
        hardware_version: v0.23
        ip_address: 192.168.0.1
        manufacturer: Demo2
        model: DemoMicroscope
        name: openfibsem-microscope-configuration
        serial_number: '123456'
        software_version: '0.1'
    ion:
        beam_type: ION
        column_tilt: 52
        current: 2.0e-11
        detector_brightness: 0.0
        detector_contrast: 0.0
        detector_mode: Unknown
        detector_type: Unknown
        dwell_time: 1.0e-06
        enabled: true
        eucentric_height: 0.0165
        hfw: 0.00015
        plasma: false
        plasma_gas: None
        resolution:
        - 1536
        - 1024
        scan_rotation: 0.0
        shift:
            x: 0.0
            y: 0.0
        stigmation:
            x: 0.0
            y: 0.0
        voltage: 30000
        working_distance: 0.0165
    manipulator:
        enabled: true
        rotation: false
        tilt: false
    milling:
        acquire_images: false
        application_file: Si
        dwell_time: 1.0e-06
        hfw: 0.00015
        milling_channel: ION
        milling_current: 2.0e-09
        milling_voltage: 30000
        patterning_mode: Serial
        preset: 30 keV; 20 nA
        rate: 3.4e-09
        spacing: 1.0
        spot_size: 5.4e-08
    protocol:
        name: demo
    stage:
        enabled: true
        manipulator_height_limit: 0.0037
        rotation: true
        rotation_180: 180
        rotation_reference: 0
        shuttle_pre_tilt: 35.0
        tilt: true
method: AutoLamella-Trench
milling:
    trench:
    -   alignment:
            enabled: false
            interval: 30
            interval_enabled: false
            rect:
                height: 0.4
                left: 0.7
                top: 0.3
                width: 0.25
        imaging:
            autocontrast: false
            autogamma: false
            beam_type: ELECTRON
            drift_correction: false
            dwell_time: 1.0e-06
            filename: default_image
            frame_integration: null
            hfw: 0.00015
            line_integration: null
            path: C:\Users\dmv31621\OneDrive - The Rosalind Franklin Institute\2025\00_Adaptive-milling
            reduced_area: null
            resolution:
            - 1536
            - 1024
            save: false
            scan_interlacing: null
        milling:
            acquire_images: false
            application_file: Si
            dwell_time: 1.0e-06
            hfw: 0.00018
            milling_channel: ION
            milling_current: 7.6e-09
            milling_voltage: 30000
            patterning_mode: Serial
            preset: 30 keV; 2.5 nA
            rate: 3.0e-11
            spacing: 1.0
            spot_size: 5.0e-08
        name: Trench
        num: 0
        pattern:
            cross_section: Rectangle
            depth: 1.25e-06
            lower_trench_height: 3.2e-05
            name: Trench
            point:
                x: 0.0
                y: 0.0
            spacing: 2.5e-05
            time: 0
            upper_trench_height: 1.6e-05
            width: 2.2e-05
        strategy:
            config: {}
            name: Standard
name: autolamella-trench-milling
options:
    alignment_at_milling_current: false
    alignment_attempts: 3
    checkpoint: null
    milling_tilt_angle: 18.0
    take_final_reference_images: true
    turn_beams_off: false
    undercut_tilt_angle: -5.0
    use_fiducial: true
    use_microexpansion: false
    use_notch: true
supervision:
    MillTrench: true
tmp:
    alignment_at_milling_current: false
    alignment_attempts: 3.0
    checkpoint: null
    high_quality_image:
        dwell_time: 2.0e-06
        enabled: false
        frame_integration: 2
        hfw: 5.0e-05
        resolution:
        - 3072
        - 2048
    lamella_tilt_angle: 18.0
    method: autolamella-trench
    name: autolamella-trench-milling
    supervise:
        mill_polishing: true
        mill_rough: true
        setup_lamella: true
        trench: true
        undercut: true
    take_final_overview_image: true
    take_final_reference_images: true
    undercut_tilt_angle: -5.0
    use_fiducial: true
    use_microexpansion: false
    use_notch: true
